---
API: 2.1
OpenSesame: 3.2.7
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title PSYC520_720_OpenSesame_Activity
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/chrislongmore/OneDrive - University of Plymouth/Documents/Teaching/2019-2020/PSYC520/Teaching Materials/github/rmip/docs/openseslib"
set disable_garbage_collection yes
set description "This experiment should be run in the first week of PSYC520/720 and the resulting datafile uploaded to PsycEL."
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define sketchpad blank_500
	set duration 500
	set description "Uses a sketchpad with nothing on it for a blank screen. Shows for 500ms"

define logger data_logger
	set description "Writes all data from this trial to disk. Defaults are used and thus all variables are logged."
	set auto_log yes

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run notes_for_PSYC520_720 always
	run main_instructions always
	run exposure_instructions always
	run exposure_phase always
	run filler_task always
	run test_instructions always
	run test_phase always
	run goodbye always

define sketchpad exposure_instructions
	set duration keypress
	set description "Shows the exposure phase instructions. Stays on the screen until a key is pressed."
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will now see 24 faces presented for 8 seconds each, one after the other.<br /><br />Try to remember these faces.<br /><br />Press any key to begin." x=0 y=0 z_index=0

define loop exposure_phase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Runs the exposure phase of 24 study faces"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 fname "01A.png"
	setcycle 1 fname "02A.png"
	setcycle 2 fname "03A.png"
	setcycle 3 fname "04A.png"
	setcycle 4 fname "05A.png"
	setcycle 5 fname "06A.png"
	setcycle 6 fname "07A.png"
	setcycle 7 fname "08A.png"
	setcycle 8 fname "09A.png"
	setcycle 9 fname "10A.png"
	setcycle 10 fname "11A.png"
	setcycle 11 fname "12A.png"
	setcycle 12 fname "13A.png"
	setcycle 13 fname "14A.png"
	setcycle 14 fname "15A.png"
	setcycle 15 fname "16A.png"
	setcycle 16 fname "17A.png"
	setcycle 17 fname "18A.png"
	setcycle 18 fname "19A.png"
	setcycle 19 fname "20A.png"
	setcycle 20 fname "21A.png"
	setcycle 21 fname "22A.png"
	setcycle 22 fname "23A.png"
	setcycle 23 fname "24A.png"
	run exposure_seq

define sequence exposure_seq
	set flush_keyboard yes
	set description "The exposure trial sequence - ie The 'things' that go to make up a trial in the exposure phase"
	run blank_500 always
	run face_exposure_display always

define sketchpad face_exposure_display
	set duration 8000
	set description "Shows an image of a face for 8 seconds"
	draw image center=1 file="[fname]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad face_test_display
	set duration 0
	set description "Shows a picture of a face an immediately moves to the next item in the trial."
	draw image center=1 file="[fname]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad filler_task
	set duration keypress
	set description "A very simple filler task. Asks the participant to count backwards from 30 in 3s. Terminates on key press."
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Now for a short, non-face recognition, task.<br /><br />Starting at 30, count backwards, in 3s until you reach 0.<br /><br />Press any key when you have finished." x=0 y=0 z_index=0

define sketchpad goodbye
	set duration keypress
	set description "Displays a goodbye message. Stays on the screen until a key is pressed upon which the experiment terminates."
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="That is the end of the experiment.<br /><br />Thank you for taking part.<br /><br /><b>Remember to upload the datafile to Psyc:EL!</b>" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses from the face test. Waits until a keypress is made before moving on. Only accepts 'z' and 'm' as valid responses."
	set correct_response "[cr]"
	set allowed_responses "z;m"

define sketchpad main_instructions
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays the main instructions for the experiment"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.2 <i>Kafkaesque Koffka</i>" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome To The Face Learning Experiment<br /><br />In this study you will see pictures of 24 faces presented on the screen sequentially.<br >Try to remember these faces as best you can.<br /><br />You will then be given a short filler task.<br /><br />Finally you will then be shown 48 faces and asked to indicate which faces you saw in the first phase.<br ><br /> If you recognise the face press the <b>z</b> key.<br >If you do not recognise the face press the <b>m</b> key.<br /><br />Press any key to begin." x=0 y=0 z_index=0

define notepad notes_for_PSYC520_720
	__note__
	The experiment file is to be used for the first high intensity session of PSYC520/720. You can also work on this task during the first low intensity session if needed.
	
	This experiment is based upon the 'Recognising Faces' Psyc:EL activity undertaken in PSYC412 last year. In this experiment you are shown 24 faces on the screen, one after the other. Each face is shown for 8 seconds each, in a random order. The task in this phase is to try to remember the faces as best you can and it is known as the exposure phase. After all faces have been shown a short filler task is given in which the participant counts backwards, in 3s, from 30 to 0. Once this has been done, 48 faces are shown, 24 from the previous phase and 24 new faces. The participant's task is to indicate which faces they had seen before. They press the 'z' key if they have seen the face before and the 'm' key if they have not. This is the test phase.
	
	For the second PsycEL activity for PSYC520/720 (called Using Open Sesame) you should run this experiment on your own machine and then upload the data file to PsycEL.
	__end__
	set description "Gives some background to the experiment."

define sketchpad test_instructions
	set duration keypress
	set description "Shows the test instructions. Stays on the screen until a keypress is made."
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will now see 48 faces presented on the screen one after the other.<br /><br />Press the <b>z</b> key if you recognise the face from the previous phase.<br />Press the <b>m</b> key if you do not recognise the face from the previous phase.<br /><br />Press any key to begin." x=0 y=0 z_index=0

define loop test_phase
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Shows all 48 test trials in a random order."
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 fname "01A.png"
	setcycle 0 cr z
	setcycle 0 type SO
	setcycle 1 fname "02A.png"
	setcycle 1 cr z
	setcycle 1 type SO
	setcycle 2 fname "03A.png"
	setcycle 2 cr z
	setcycle 2 type SO
	setcycle 3 fname "04A.png"
	setcycle 3 cr z
	setcycle 3 type SO
	setcycle 4 fname "05A.png"
	setcycle 4 cr z
	setcycle 4 type SO
	setcycle 5 fname "06A.png"
	setcycle 5 cr z
	setcycle 5 type SO
	setcycle 6 fname "07A.png"
	setcycle 6 cr z
	setcycle 6 type SO
	setcycle 7 fname "08A.png"
	setcycle 7 cr z
	setcycle 7 type SO
	setcycle 8 fname "09A.png"
	setcycle 8 cr z
	setcycle 8 type SO
	setcycle 9 fname "10A.png"
	setcycle 9 cr z
	setcycle 9 type SO
	setcycle 10 fname "11A.png"
	setcycle 10 cr z
	setcycle 10 type SO
	setcycle 11 fname "12A.png"
	setcycle 11 cr z
	setcycle 11 type SO
	setcycle 12 fname "13B.png"
	setcycle 12 cr z
	setcycle 12 type SD
	setcycle 13 fname "14B.png"
	setcycle 13 cr z
	setcycle 13 type SD
	setcycle 14 fname "15B.png"
	setcycle 14 cr z
	setcycle 14 type SD
	setcycle 15 fname "16B.png"
	setcycle 15 cr z
	setcycle 15 type SD
	setcycle 16 fname "17B.png"
	setcycle 16 cr z
	setcycle 16 type SD
	setcycle 17 fname "18B.png"
	setcycle 17 cr z
	setcycle 17 type SD
	setcycle 18 fname "19B.png"
	setcycle 18 cr z
	setcycle 18 type SD
	setcycle 19 fname "20B.png"
	setcycle 19 cr z
	setcycle 19 type SD
	setcycle 20 fname "21B.png"
	setcycle 20 cr z
	setcycle 20 type SD
	setcycle 21 fname "22B.png"
	setcycle 21 cr z
	setcycle 21 type SD
	setcycle 22 fname "23B.png"
	setcycle 22 cr z
	setcycle 22 type SD
	setcycle 23 fname "24B.png"
	setcycle 23 cr z
	setcycle 23 type SD
	setcycle 24 fname "25A.png"
	setcycle 24 cr m
	setcycle 24 type NS
	setcycle 25 fname "26A.png"
	setcycle 25 cr m
	setcycle 25 type NS
	setcycle 26 fname "27A.png"
	setcycle 26 cr m
	setcycle 26 type NS
	setcycle 27 fname "28A.png"
	setcycle 27 cr m
	setcycle 27 type NS
	setcycle 28 fname "29A.png"
	setcycle 28 cr m
	setcycle 28 type NS
	setcycle 29 fname "30A.png"
	setcycle 29 cr m
	setcycle 29 type NS
	setcycle 30 fname "31A.png"
	setcycle 30 cr m
	setcycle 30 type NS
	setcycle 31 fname "32A.png"
	setcycle 31 cr m
	setcycle 31 type NS
	setcycle 32 fname "33A.png"
	setcycle 32 cr m
	setcycle 32 type NS
	setcycle 33 fname "34A.png"
	setcycle 33 cr m
	setcycle 33 type NS
	setcycle 34 fname "35A.png"
	setcycle 34 cr m
	setcycle 34 type NS
	setcycle 35 fname "36A.png"
	setcycle 35 cr m
	setcycle 35 type NS
	setcycle 36 fname "37A.png"
	setcycle 36 cr m
	setcycle 36 type NS
	setcycle 37 fname "38A.png"
	setcycle 37 cr m
	setcycle 37 type NS
	setcycle 38 fname "39A.png"
	setcycle 38 cr m
	setcycle 38 type NS
	setcycle 39 fname "40A.png"
	setcycle 39 cr m
	setcycle 39 type NS
	setcycle 40 fname "41A.png"
	setcycle 40 cr m
	setcycle 40 type NS
	setcycle 41 fname "42A.png"
	setcycle 41 cr m
	setcycle 41 type NS
	setcycle 42 fname "43A.png"
	setcycle 42 cr m
	setcycle 42 type NS
	setcycle 43 fname "44A.png"
	setcycle 43 cr m
	setcycle 43 type NS
	setcycle 44 fname "45A.png"
	setcycle 44 cr m
	setcycle 44 type NS
	setcycle 45 fname "46A.png"
	setcycle 45 cr m
	setcycle 45 type NS
	setcycle 46 fname "47A.png"
	setcycle 46 cr m
	setcycle 46 type NS
	setcycle 47 fname "48A.png"
	setcycle 47 cr m
	setcycle 47 type NS
	run test_sequence

define sequence test_sequence
	set flush_keyboard yes
	set description "The exposure trial sequence - ie The 'things' that go to make up a trial in the exposure phase"
	run blank_500 always
	run face_test_display always
	run keyboard_response always
	run data_logger always

